CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Image>[A-Z] - [0-9])\(fld (?P<Field>[0-9][0-9]) wv (?P<Channel>.*) time (?P<TimeNumber>[0-9][0-9]) - (?P<Time>.*)ms\).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "Blue - FITC")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:GFP
    Name the output image:RescaleGFP
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:RescaleGFP
    Name the primary objects to be identified:GFP
    Typical diameter of objects, in pixel units (Min,Max):20,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:10.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.8
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:300
    Lower outlier fraction:0.1
    Upper outlier fraction:0.3
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:3.0
    Thresholding method:Robust Background

OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleGFP
    Name the output image:GFPOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:GFP

SaveImages:[module_num:8|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:GFPOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Dropbox (MIT)\\Jin Lab Internal\\Josh\\aav\\imageanalysis\\overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_GFP,Image|Metadata_Time,Image|Metadata_Series,Image|Metadata_Image,Image|Metadata_TimeNumber,Image|Metadata_Channel,Image|Metadata_FileLocation,Image|Metadata_Field,Image|Metadata_Frame
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:GFPcount_
    Overwrite existing files without warning?:No
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